<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:cf="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:Format>
            <vid:FrameSize>
              <vid:Width>1280</vid:Width>
              <vid:Height>720</vid:Height>
            </vid:FrameSize>
            <vid:AverageFrameRate>120</vid:AverageFrameRate>
            <vid:MaximumFrameRate>120</vid:MaximumFrameRate>
            <vid:BitCount>24</vid:BitCount>
          </vid:Format>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.03S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>video feed</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>PumpCmdLEFT</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="leftCOM" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:PortName>COM7</harp:PortName>
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>PumpCmdRIGHT</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="rightCOM" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:PortName>COM8</harp:PortName>
                <harp:DeviceState>Active</harp:DeviceState>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:LedState>On</harp:LedState>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enable</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:IgnoreElements" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>PumpCmdLEFT</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:IgnoreElements" />
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>PumpCmdRIGHT</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>80</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:SyringePumpCommand">
              <cf:Type>ProtocolNumberOfSteps</cf:Type>
              <cf:Mask>Full</cf:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PumpCmdLEFT</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PumpCmdRIGHT</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Reward_no</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>Trial_no</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>drawSideNow</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateDiscreteUniform">
                      <p1:Lower>0</p1:Lower>
                      <p1:Upper>1</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="BehaviorSubject">
              <Name>baited_Side</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location>
            <gl:X>-1000</gl:X>
            <gl:Y>1000</gl:Y>
          </gl:Location>
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>First</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>white-noise</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>C:\Users\pemb3208.ZOO\Desktop\fishProject\Bonsai\white-noise.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
            <gl:TextureConfiguration xsi:type="gl:Texture2D">
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>record session and track</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>video feed</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>268</cv:X>
                  <cv:Y>101</cv:Y>
                  <cv:Width>1002</cv:Width>
                  <cv:Height>496</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>C:\Users\pemb3208.ZOO\Desktop\fishProject\DATA\Training\Training2_Fish_.avi</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Gold position tracker</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:ConvertColor">
                      <cv:Conversion>Bgr2Hsv</cv:Conversion>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:HsvThreshold">
                      <cv:Lower>
                        <cv:Val0>13</cv:Val0>
                        <cv:Val1>120</cv:Val1>
                        <cv:Val2>115</cv:Val2>
                        <cv:Val3>0</cv:Val3>
                      </cv:Lower>
                      <cv:Upper>
                        <cv:Val0>164</cv:Val0>
                        <cv:Val1>212</cv:Val1>
                        <cv:Val2>255</cv:Val2>
                        <cv:Val3>0</cv:Val3>
                      </cv:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:MorphologicalOperator">
                      <cv:Size>
                        <cv:Width>10</cv:Width>
                        <cv:Height>10</cv:Height>
                      </cv:Size>
                      <cv:Anchor>
                        <cv:X>-1</cv:X>
                        <cv:Y>-1</cv:Y>
                      </cv:Anchor>
                      <cv:Shape>Ellipse</cv:Shape>
                      <cv:Iterations>1</cv:Iterations>
                      <cv:Operation>Dilate</cv:Operation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:FindContours">
                      <cv:Mode>External</cv:Mode>
                      <cv:Method>ChainApproxNone</cv:Method>
                      <cv:Offset>
                        <cv:X>0</cv:X>
                        <cv:Y>0</cv:Y>
                      </cv:Offset>
                      <cv:MinArea>600</cv:MinArea>
                      <cv:MaxArea xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:BinaryRegionAnalysis" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:LargestBinaryRegion" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Centroid" />
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>centroid</Name>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="io:CsvWriter">
                      <io:FileName>C:\Users\pemb3208.ZOO\Desktop\fishProject\DATA\testFish_StartPosition.csv</io:FileName>
                      <io:Append>false</io:Append>
                      <io:Overwrite>false</io:Overwrite>
                      <io:Suffix>Timestamp</io:Suffix>
                      <io:IncludeHeader>false</io:IncludeHeader>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="WorkflowOutput" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Crop">
                      <cv:RegionOfInterest>
                        <cv:X>96</cv:X>
                        <cv:Y>30</cv:Y>
                        <cv:Width>175</cv:Width>
                        <cv:Height>205</cv:Height>
                      </cv:RegionOfInterest>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Sum" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>25000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>right side crossed</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Crop">
                      <cv:RegionOfInterest>
                        <cv:X>88</cv:X>
                        <cv:Y>269</cv:Y>
                        <cv:Width>183</cv:Width>
                        <cv:Height>208</cv:Height>
                      </cv:RegionOfInterest>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Sum" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>25000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>left side crossed</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:Crop">
                      <cv:RegionOfInterest>
                        <cv:X>475</cv:X>
                        <cv:Y>6</cv:Y>
                        <cv:Width>269</cv:Width>
                        <cv:Height>485</cv:Height>
                      </cv:RegionOfInterest>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Sum" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Val0</Selector>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>25000</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="PublishSubject">
                    <Name>start position crossed</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="11" Label="Source1" />
                  <Edge From="2" To="16" Label="Source1" />
                  <Edge From="2" To="21" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Reward_no</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Lower" DisplayName="MinITI" />
        <Property Name="Upper" DisplayName="maxITI" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ITI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" />
              <Property Name="Upper" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Lower" />
                    <Property Name="Upper" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateContinuousUniform">
                      <p1:Lower>10</p1:Lower>
                      <p1:Upper>20</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Convert.ToInt32(it)
</scr:Expression>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT12S</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0.5</LocationY>
                    <Layer>0</Layer>
                    <Diameter>10</Diameter>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="11" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>StartPosition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>start position crossed</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>S</wie:Filter>
                  <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="response_window" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>Stim_control</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>baited_Side</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isLEFT</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="response_window" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>LEFTside</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
                    <Angle>0</Angle>
                    <TextureName>white-noise</TextureName>
                    <ExtentX>2</ExtentX>
                    <ExtentY>1</ExtentY>
                    <LocationX>-1</LocationX>
                    <LocationY>-0.6</LocationY>
                    <Layer>0</Layer>
                    <ScaleX>1</ScaleX>
                    <ScaleY>1</ScaleY>
                    <ShiftX>0</ShiftX>
                    <ShiftY>0</ShiftY>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>left side crossed</Name>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Description />
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DelaySubscription">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="wie:KeyDown">
                        <wie:Filter>Left</wie:Filter>
                        <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="response_window" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1H</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="15" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="13" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="14" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isRIGHT</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>RIGHTside</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
                    <Angle>0</Angle>
                    <TextureName>white-noise</TextureName>
                    <ExtentX>2</ExtentX>
                    <ExtentY>1</ExtentY>
                    <LocationX>1</LocationX>
                    <LocationY>-0.6</LocationY>
                    <Layer>0</Layer>
                    <ScaleX>1</ScaleX>
                    <ScaleY>1</ScaleY>
                    <ShiftX>0</ShiftX>
                    <ShiftY>0</ShiftY>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>right side crossed</Name>
                  </Expression>
                  <Expression xsi:type="Condition">
                    <Description />
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Equal">
                          <Operand xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Operand>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DelaySubscription">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
                      <Combinator xsi:type="wie:KeyDown">
                        <wie:Filter>Right</wie:Filter>
                        <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
                      </Combinator>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="response_window" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1H</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="15" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="13" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="14" To="16" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="5" To="8" Label="Source2" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Success</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>true</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Sink">
        <Name>Food_delivery</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>baited_Side</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isLEFT</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:SyringePumpCommand">
              <cf:Type>EnableProtocol</cf:Type>
              <cf:Mask>Full</cf:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PumpCmdLEFT</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isRIGHT</Name>
              <Description />
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="cf:SyringePumpCommand">
              <cf:Type>EnableProtocol</cf:Type>
              <cf:Mask>Full</cf:Mask>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>PumpCmdRIGHT</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="8" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>reward_counter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Reward_no</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Reward_no</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>Miss</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="BooleanProperty">
                <Value>false</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Trial_counter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trial_no</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Trial_no</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>drawSide</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SelectMany">
              <Name>drawSideNow</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateDiscreteUniform">
                      <p1:Lower>0</p1:Lower>
                      <p1:Upper>1</p1:Upper>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>baited_Side</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Condition">
        <Name>check_end</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>12</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ReadPixels">
          <gl:RegionOfInterest xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>640</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:Size>
          <cv:Interpolation>Linear</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>video feed</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>268</cv:X>
            <cv:Y>101</cv:Y>
            <cv:Width>1002</cv:Width>
            <cv:Height>496</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>640</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:Size>
          <cv:Interpolation>Linear</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Concat">
          <dsp:Axis>0</dsp:Axis>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="9" To="24" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="19" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="36" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source2" />
      <Edge From="36" To="37" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>