WorkflowBuilder(Version=2.7.0)
ExternalizedMapping(RootPath(Category=Logging), ExperimentName(Category=Logging), LoggerSubjectName(Category=Logging))
-> GroupWorkflow Logging
    ExternalizedMapping(Value(DisplayName=RootPath))
    -> StringProperty(Value=c:\Data)
    -> Take(Count=1)
    -> AsyncSubject RootPath

    ExternalizedMapping(Value(DisplayName=ExperimentName))
    -> StringProperty(Value=Fish1) => #5
    SubscribeSubject RootPath => #6
    #6, #5 -> Zip
    -> Format(Format={0}\{1}\, Selector="Item1,Item2")
    -> AsyncSubject ExperimentPath

    ExternalizedMapping(Name(DisplayName=LoggerSubjectName))
    -> BehaviorSubject<System.String> EventsSubject => #11
    SubscribeSubject ExperimentPath
    -> Format(Format={0}_Events.csv, Selector=it)
    -> PropertyMapping(FileName) => #14
    #11, #14 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\pemb3208.ZOO\Desktop\fishProject\DATA\bubu_colours_events_.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
      Selector=""

    SubscribeSubject PumpEventsLEFT
    -> MemberSelector(Selector=MessageBytes) => #17
    SubscribeSubject ExperimentPath
    -> Format(Format={0}_PumpEventsLEFT.bin, Selector=it)
    -> PropertyMapping(Path) => #20
    #17, #20 -> Bonsai.Dsp.MatrixWriter(Suffix=None, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject PumpEventsRIGHT
    -> MemberSelector(Selector=MessageBytes) => #23
    SubscribeSubject ExperimentPath
    -> Format(Format={0}_PumpEventsRIGHT.bin, Selector=it)
    -> PropertyMapping(Path) => #26
    #23, #26 -> Bonsai.Dsp.MatrixWriter(Suffix=None, Overwrite=false, Layout=ColumnMajor)

    SubscribeSubject VideoFeed => #28
    SubscribeSubject ExperimentPath
    -> Format(Format={0}_Video.avi, Selector=it)
    -> PropertyMapping(FileName) => #31
    #28, #31 -> Bonsai.Vision.VideoWriter
      FileName=C:\Users\pemb3208.ZOO\Desktop\fishProject\DATA\bubu_raw_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp => #33
    SubscribeSubject ExperimentPath
    -> Format(Format={0}_video_timestamp.avi, Selector=it)
    -> PropertyMapping(FileName) => #36
    #33, #36 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)

    SubscribeSubject centroid => #38
    SubscribeSubject stimLum => #39
    #39, #38 -> Zip => #40
    SubscribeSubject ExperimentPath
    -> Format(Format={0}_Tracking.csv, Selector=it)
    -> PropertyMapping(FileName) => #43
    #40, #43 -> Bonsai.IO.CsvWriter(FileName=C:\Users\pemb3208.ZOO\Desktop\fishProject\DATA\bubu_tracks_.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)

ExternalizedMapping(LeftFeeder_COM(Category=Hardware), RightFeeder_COM(Category=Hardware))
-> GroupWorkflow Hardware
    ExternalizedMapping(PortName(DisplayName=LeftFeeder_COM)) => #0
    BehaviorSubject<Bonsai.Harp.HarpMessage> PumpCmdLEFT => #1
    #1, #0 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Enable, IgnoreErrors=false, PortName=COM7)
    -> PublishSubject PumpEventsLEFT

    ExternalizedMapping(PortName(DisplayName=RightFeeder_COM)) => #4
    BehaviorSubject<Bonsai.Harp.HarpMessage> PumpCmdRIGHT => #5
    #5, #4 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Enable, IgnoreErrors=false, PortName=COM8)
    -> PublishSubject PumpEventsRIGHT

    IntProperty(Value=80)
    -> Bonsai.Harp.CF.SyringePumpCommand(Type=ProtocolNumberOfSteps) => #9
    -> MulticastSubject PumpCmdLEFT
    #9 -> MulticastSubject PumpCmdRIGHT

    ExternalizedMapping(Format, CaptureProperties)
    -> Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=640, Height=480), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="")
    -> PublishSubject VideoFeed

ExternalizedMapping(trialListPath)
-> GroupWorkflow Initialization
    ExternalizedMapping(FileName(DisplayName=trialListPath))
    -> Bonsai.IO.CsvReader(FileName=C:\Users\pemb3208.ZOO\Desktop\fishProject\Bonsai\TrialLists\TrialList_splusLandR_colours.csv, ScanPattern="%i,%i,%i,%i,%i", SkipRows=1)
    -> Bonsai.Numerics.Permutation
    -> ToList
    -> BehaviorSubject TrialList

    IntProperty(Value=0)
    -> BehaviorSubject AccumulatedRewards

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    Defer DrawFirstSide
        Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample
        -> WorkflowOutput
    -> BehaviorSubject baited_Side

    IntProperty(Value=0)
    -> BehaviorSubject trialType

    IntProperty(Value=0)
    -> BehaviorSubject stimLEFT

    IntProperty(Value=0)
    -> BehaviorSubject stimRIGHT

    IntProperty(Value=0)
    -> BehaviorSubject rwdLEFT

    IntProperty(Value=0)
    -> BehaviorSubject rwdRIGHT

    IntProperty(Value=5)
    -> BehaviorSubject lastChoice

GroupWorkflow Tracking
    SubscribeSubject VideoFeed => #0
    -> Bonsai.Vision.Crop(RegionOfInterest(X=268, Y=101, Width=1002, Height=496))
    -> Bonsai.Vision.ConvertColor(Conversion=Bgr2Hsv)
    -> Bonsai.Vision.HsvThreshold(Lower(Val0=13, Val1=120, Val2=115, Val3=0), Upper(Val0=164, Val1=212, Val2=255, Val3=0)) => #3
    -> GroupWorkflow "Right ROI"
        WorkflowInput Source1 => #0
        ExternalizedMapping(RegionOfInterest(DisplayName=Right_ROI, Category=ROI)) => #1
        #0, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=37, Y=33, Width=229, Height=213))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #4
        ExternalizedMapping(Value(DisplayName=Right_Thr, Category=ROI_Threshold)) => #5
        #4, #5 -> GreaterThan(Operand=DoubleProperty(Value=100))
        -> PublishSubject right_side_crossed
        -> WorkflowOutput
    #3 -> GroupWorkflow "Left ROI"
        WorkflowInput Source1 => #0
        ExternalizedMapping(RegionOfInterest(DisplayName=Left_ROI, Category=ROI)) => #1
        #0, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=58, Y=259, Width=206, Height=230))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #4
        ExternalizedMapping(Value(DisplayName=Left_Thr, Category=ROI_Threshold)) => #5
        #4, #5 -> GreaterThan(Operand=DoubleProperty(Value=100))
        -> PublishSubject left_side_crossed
        -> WorkflowOutput
    #3 -> GroupWorkflow "Start Position ROI"
        WorkflowInput Source1 => #0
        ExternalizedMapping(RegionOfInterest(DisplayName=Start_ROI, Category=ROI)) => #1
        #0, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=803, Y=174, Width=196, Height=141))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #4
        ExternalizedMapping(Value(DisplayName=Start_Thr, Category=ROI_Threshold)) => #5
        #4, #5 -> GreaterThan(Operand=DoubleProperty(Value=100))
        -> PublishSubject start_position_crossed
        -> WorkflowOutput
    #3 -> GroupWorkflow "Fish Tracker"
        WorkflowInput Source1
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=10, Height=10), Anchor(X=-1, Y=-1), Shape=Ellipse, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=600, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> PublishSubject centroid
        -> WorkflowOutput
    #0 -> GroupWorkflow SyncTracker
        WorkflowInput Source1 => #0
        ExternalizedMapping(RegionOfInterest(DisplayName=Sync_ROI, Category=ROI)) => #1
        #0, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=38, Y=339, Width=10, Height=32))
        -> Bonsai.Vision.Grayscale
        -> Bonsai.Dsp.Sum
        -> MemberSelector(Selector=Val0)
        -> PublishSubject stimLum
        -> WorkflowOutput

GroupWorkflow "BonVision Resources"
    Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=-640, Y=-480)
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=white-noise
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Resources\whitenoise.png
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
    -> PublishSubject Draw

GroupWorkflow "Task Control"
    SubscribeSubject AccumulatedRewards => #0
    ExternalizedMapping(Value(DisplayName=MaxTrials, Category=MaxTrials)) => #1
    ExternalizedMapping(Lower(Category=ITI), Upper(Category=ITI))
    -> Defer DrawITI
        ExternalizedMapping(Lower, Upper)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=20, Upper=40)
        -> Bonsai.Numerics.Distributions.Sample => #2
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT0S) => #5
        -> WorkflowOutput
        #5 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0)
        SubscribeSubject Draw
        -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0.5, Layer=0, Diameter=10, ColorR=0, ColorG=0, ColorB=0, ColorA=1) => #9
        #9, #5 -> TakeUntil
        #2 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0)
    -> SelectMany updateTrialList
        SubscribeSubject TrialList => #0
        SubscribeSubject TrialNumber
        -> PropertyMapping(Value) => #2
        #0, #2 -> Index(Operand=IntProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item1 as trial_type,
            it.Item2 as stim_left,
            it.Item3 as stim_right,
            it.Item4 as rwd_left,
            it.Item5 as rwd_right
            )
        -> BehaviorSubject "Trial Settings"

        SubscribeSubject "Trial Settings"
        -> MemberSelector(Selector=stim_left)
        -> MulticastSubject stimLEFT

        SubscribeSubject "Trial Settings"
        -> MemberSelector(Selector=stim_right)
        -> MulticastSubject stimRIGHT

        SubscribeSubject "Trial Settings"
        -> MemberSelector(Selector=rwd_left)
        -> MulticastSubject rwdLEFT

        SubscribeSubject "Trial Settings"
        -> MemberSelector(Selector=rwd_right)
        -> MulticastSubject rwdRIGHT

        SubscribeSubject "Trial Settings"
        -> MemberSelector(Selector=trial_type)
        -> MulticastSubject trialType
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany StartPosition
        SubscribeSubject start_position_crossed
        -> Condition => #1
            WorkflowInput Source1
            -> WorkflowOutput
        Disable Bonsai.Shaders.Input.KeyDown(Key=S, Modifiers=nil)
        -> Disable BooleanProperty(Value=false) => #3
        #1, #3 -> Disable Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Stim_control => #6
        WorkflowInput Source1 => #0
        SubscribeSubject trialType => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        Source2=#3 -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0)
        #3 -> Condition isBOTH
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> SelectMany LEFTorRIGHT => #7
            SubscribeSubject Draw
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0.9, Layer=0, Diameter=0.1, ColorR=1, ColorG=1, ColorB=1, ColorA=1)

            SubscribeSubject left_side_crossed
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=0) => #4
            SubscribeSubject right_side_crossed
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1) => #7
            #4, #7 -> Merge
            -> Take(Count=1)
            -> PublishSubject TrialResponse => #10
            Disable PropertyMapping(EventValue) => #11
            #10, #11 -> Disable IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0)
            -> WorkflowOutput

            SubscribeSubject stimLEFT
            -> Condition 1-4?
                WorkflowInput Source1 => #0
                -> LessThan(Operand=IntProperty(Value=5)) => #1
                #0 -> GreaterThan(Operand=IntProperty(Value=0)) => #2
                #2, #1 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> SelectMany DrawStimLeft
                WorkflowInput Source1 => #0
                -> Condition 1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=1, Y=0, Z=0, W=1) => #2
                #0 -> Condition 2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=1, W=1) => #4
                #0 -> Condition 3
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1) => #6
                #0 -> Condition 4
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=0, Y=1, Z=0, W=1) => #8
                #2, #4, #6, #8 -> Merge
                -> Take(Count=1)
                -> AsyncSubject StimColor
                Disable PropertyMapping(EventValue) => #12
                #0, #12 -> Disable IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0)

                SubscribeSubject Draw => #14
                SubscribeSubject StimColor
                -> PropertyMapping(ColorA(Selector=W), ColorB(Selector=X), ColorG(Selector=Y), ColorR(Selector=Z)) => #16
                #14, #16 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=0, ColorB=1, ColorA=1) => #17
                SubscribeSubject TrialResponse => #18
                #17, #18 -> TakeUntil

            SubscribeSubject stimRIGHT
            -> Condition 1-4?
                WorkflowInput Source1 => #0
                -> LessThan(Operand=IntProperty(Value=5)) => #1
                #0 -> GreaterThan(Operand=IntProperty(Value=0)) => #2
                #2, #1 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> SelectMany DrawStimRight
                WorkflowInput Source1 => #0
                -> Condition 1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=1, Y=0, Z=0, W=1) => #2
                #0 -> Condition 2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=1, W=1) => #4
                #0 -> Condition 3
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1) => #6
                #0 -> Condition 4
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=0, Y=1, Z=0, W=1) => #8
                #2, #4, #6, #8 -> Merge
                -> Take(Count=1)
                -> AsyncSubject StimColor
                Disable PropertyMapping(EventValue) => #12
                #0, #12 -> Disable IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0)

                SubscribeSubject Draw => #14
                SubscribeSubject StimColor
                -> PropertyMapping(ColorA(Selector=W), ColorB(Selector=X), ColorG(Selector=Y), ColorR(Selector=Z)) => #16
                #14, #16 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=0, ColorB=1, ColorA=1) => #17
                SubscribeSubject TrialResponse => #18
                #17, #18 -> TakeUntil
        -> Condition choseLEFT
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Sink updateChoice => #9
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> MulticastSubject lastChoice
            -> WorkflowOutput
        ExternalizedMapping(leftCueDelay) => #10
        #9, #10 -> SelectMany LEFTterminal => #11
            SubscribeSubject stimLEFT => #0
            Bonsai.Shaders.RenderFrame => #1
            Bonsai.Shaders.RenderFrame => #2
            Bonsai.Shaders.RenderFrame => #3
            Bonsai.Shaders.RenderFrame => #4
            ExternalizedMapping(DueTime(DisplayName=leftCueDelay)) => #5
            WorkflowInput Source1 => #6
            #6, #0 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #8
            -> Condition isSTIM1 => #9
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            #1, #9 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=0, ColorB=1, ColorA=1) => #12
            #8 -> Condition isSTIM2 => #13
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            #2, #13 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=0, ColorB=0, ColorA=1) => #16
            #8 -> Condition isSTIM3 => #17
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=3))
                -> WorkflowOutput
            #3, #17 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=1, ColorB=1, ColorA=1) => #20
            #8 -> Condition isSTIM4 => #21
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            #4, #21 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=1, ColorB=0, ColorA=1) => #24
            #12, #16, #20, #24 -> Merge
            -> BooleanProperty(Value=true) => #26
            #26, #5 -> Bonsai.Shaders.Delay(DueTime=PT0S)
            -> WorkflowOutput
        #7 -> Condition choseRIGHT
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Sink updateChoice => #13
            WorkflowInput Source1
            -> IntProperty(Value=1)
            -> MulticastSubject lastChoice
            -> WorkflowOutput
        ExternalizedMapping(rightCueDelay) => #14
        #13, #14 -> SelectMany RIGHTterminal => #15
            Bonsai.Shaders.RenderFrame => #0
            SubscribeSubject stimRIGHT => #1
            Bonsai.Shaders.RenderFrame => #2
            Bonsai.Shaders.RenderFrame => #3
            Bonsai.Shaders.RenderFrame => #4
            ExternalizedMapping(DueTime(DisplayName=rightCueDelay)) => #5
            WorkflowInput Source1 => #6
            #6, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #8
            -> Condition isSTIM3 => #9
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=3))
                -> WorkflowOutput
            #2, #9 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=1, ColorB=1, ColorA=1) => #12
            #8 -> Condition isSTIM4 => #13
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            #3, #13 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=1, ColorB=0, ColorA=1) => #16
            #8 -> Condition isSTIM1 => #17
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            #0, #17 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=0, ColorB=1, ColorA=1) => #20
            #8 -> Condition isSTIM2 => #21
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            #4, #21 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=0, ColorB=0, ColorA=1) => #24
            #12, #16, #20, #24 -> Merge
            -> BooleanProperty(Value=true) => #26
            #26, #5 -> Bonsai.Shaders.Delay(DueTime=PT0S)
            -> WorkflowOutput
        #7 -> Condition noCHOICE
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=-1))
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #17
        #11, #15, #17 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition Success
        WorkflowInput Source1
        -> WorkflowOutput
    -> Sink Food_delivery
        WorkflowInput Source1 => #0
        SubscribeSubject lastChoice => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        -> Condition isLEFT => #4
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject rwdLEFT => #5
        #4, #5 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #7
        -> Condition giveFOOD
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #9
        -> Bonsai.Harp.CF.SyringePumpCommand(Type=EnableProtocol)
        -> MulticastSubject PumpCmdLEFT
        #9 -> IntProperty(Value=1)
        -> PropertyMapping(EventValue) => #13
        #9, #13 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0)
        #7 -> Condition noFOOD
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0)
        #3 -> Condition isRIGHT => #18
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        SubscribeSubject rwdRIGHT => #19
        #18, #19 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #21
        -> Condition giveFOOD
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #23
        -> Bonsai.Harp.CF.SyringePumpCommand(Type=EnableProtocol)
        -> MulticastSubject PumpCmdRIGHT
        #23 -> IntProperty(Value=1)
        -> PropertyMapping(EventValue) => #27
        #23, #27 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0)
        #21 -> Condition noFOOD
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0)
    -> GroupWorkflow SuccessCounter => #9
        WorkflowInput Source1 => #0
        SubscribeSubject AccumulatedRewards => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject AccumulatedRewards
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    #6 -> Condition Miss => #10
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #9, #10 -> Merge
    -> GroupWorkflow Trial_counter
        WorkflowInput Source1 => #0
        SubscribeSubject TrialNumber => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrialNumber => #5
        -> WorkflowOutput
        Source2=#5 -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0)
    -> Repeat => #13
    #13, #0 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #15
    #15, #1 -> Condition check_end
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=24))
        -> WorkflowOutput
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT0S)
    -> Take(Count=1)
    -> WorkflowOutput
-> WorkflowOutput

GroupWorkflow Visualisation
    Bonsai.Shaders.UpdateFrame
    -> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)
    -> Bonsai.Vision.Resize(Size(Width=640, Height=480), Interpolation=Linear) => #2
    SubscribeSubject VideoFeed
    -> Bonsai.Vision.Crop(RegionOfInterest(X=268, Y=101, Width=1002, Height=496))
    -> Bonsai.Vision.Resize(Size(Width=640, Height=480), Interpolation=Linear) => #5
    #2, #5 -> WithLatestFrom
    -> Bonsai.Dsp.Concat(Axis=0)
    -> WorkflowOutput
