WorkflowBuilder(Version=2.6.0)
ExternalizedMapping(trialListPath, FileName, LeftFeeder_COM, RightFeeder_COM)
-> GroupWorkflow Initialization
    ExternalizedMapping(FileName(DisplayName=trialListPath))
    -> Bonsai.IO.CsvReader(FileName=C:\Users\pemb3208.ZOO\Desktop\fishProject\Bonsai\TrialLists\TrialList_splusLandR_colours.csv, ScanPattern="%i,%i,%i,%i,%i", SkipRows=1)
    -> Bonsai.Numerics.Permutation
    -> ToList
    -> BehaviorSubject trialList

    ExternalizedMapping(FileName)
    -> GroupWorkflow Init_FishEventLog
        ExternalizedProperty Name(MemberName=Name, Description="The name of the subject on which events will be logged.", Category=Subject) => #0
        StringProperty
        -> IgnoreElements => #2
        #2, #0 -> BehaviorSubject EventsSubject
        ExternalizedMapping(FileName) => #4
        #0, #4 -> GroupWorkflow GenerateFileName
            ExternalizedProperty Name(MemberName=Value)
            -> StringProperty(Value=EventsSubject) => #1
            ExternalizedMapping(Value(DisplayName=FileName))
            -> PropertySource<Bonsai.IO.CsvWriter,System.String>(MemberName=FileName, Value=C:\Users\pemb3208.ZOO\Desktop\fishProject\DATA\bubu_colours_events_.csv) => #3
            #1, #3 -> Zip
            -> Bonsai.Scripting.ExpressionTransform
              Expression: !string.IsNullOrEmpty(Item2) ? Item2 : Item1 + ".csv"
            -> Take(Count=1)
            -> WorkflowOutput
        -> ExternalizedProperty(MemberName=FileName) => #6
        #0 -> SubscribeSubject EventsSubject => #7
        ExternalizedMapping(Append, Overwrite, Suffix) => #8
        #7, #6, #8 -> Bonsai.IO.CsvWriter
          FileName=C:\Users\pemb3208.ZOO\Desktop\fishProject\DATA\bubu_colours_events_.csv
          Delimiter=","
          Append=false
          Overwrite=false
          Suffix=Timestamp
          IncludeHeader=false
          Selector=""

    SubscribeSubject PumpCmdLEFT => #7
    ExternalizedMapping(PortName(DisplayName=LeftFeeder_COM)) => #8
    #7, #8 -> Bonsai.Harp.Device(PortName=COM7, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Enable, IgnoreErrors=false)

    SubscribeSubject PumpCmdRIGHT => #10
    ExternalizedMapping(PortName(DisplayName=RightFeeder_COM)) => #11
    #10, #11 -> Bonsai.Harp.Device(PortName=COM8, DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Enable, IgnoreErrors=false)

    Bonsai.Harp.CreateMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
    -> IgnoreElements
    -> BehaviorSubject PumpCmdLEFT

    Bonsai.Harp.CreateMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
    -> IgnoreElements
    -> BehaviorSubject PumpCmdRIGHT

    IntProperty(Value=80)
    -> Bonsai.Harp.CF.SyringePumpCommand(Type=ProtocolNumberOfSteps, Mask=Full) => #20
    -> MulticastSubject PumpCmdLEFT
    #20 -> MulticastSubject PumpCmdRIGHT

    IntProperty(Value=0)
    -> BehaviorSubject Reward_no

    IntProperty(Value=0)
    -> BehaviorSubject Trial_no

    Disable IntProperty(Value=0)
    -> Disable SelectMany drawSideNow
        Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample
        -> WorkflowOutput
    -> Disable BehaviorSubject baited_Side

    IntProperty(Value=0)
    -> BehaviorSubject trialType

    IntProperty(Value=0)
    -> BehaviorSubject stimLEFT

    IntProperty(Value=0)
    -> BehaviorSubject stimRIGHT

    IntProperty(Value=0)
    -> BehaviorSubject rwdLEFT

    IntProperty(Value=0)
    -> BehaviorSubject rwdRIGHT

    IntProperty(Value=5)
    -> BehaviorSubject lastChoice

ExternalizedMapping(VideoFile, trackingFile)
-> GroupWorkflow "Video capture"
    ExternalizedMapping(FileName(DisplayName=VideoFile)) => #0
    Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=640, Height=480), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="")
    -> SampleInterval(Interval=PT0.03S) => #2
    -> PublishSubject "video feed"
    #2, #0 -> Bonsai.Vision.VideoWriter
      FileName=C:\Users\pemb3208.ZOO\Desktop\fishProject\DATA\bubu_raw_.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    ExternalizedMapping(trackingFile)
    -> GroupWorkflow "record session and track"
        SubscribeSubject "video feed" => #0
        -> Bonsai.Vision.Crop(RegionOfInterest(X=268, Y=101, Width=1002, Height=496)) => #1
        ExternalizedMapping(trackingFile) => #2
        #1, #2 -> GroupWorkflow "Video Tracking Settings"
            WorkflowInput Source1
            -> Bonsai.Vision.ConvertColor(Conversion=Bgr2Hsv)
            -> Bonsai.Vision.HsvThreshold(Lower(Val0=13, Val1=120, Val2=115, Val3=0), Upper(Val0=164, Val1=212, Val2=255, Val3=0)) => #2
            -> GroupWorkflow "Right ROI"
                WorkflowInput Source1
                -> Bonsai.Vision.Crop(RegionOfInterest(X=37, Y=33, Width=229, Height=213))
                -> Bonsai.Dsp.Sum
                -> MemberSelector(Selector=Val0)
                -> GreaterThan(Operand=DoubleProperty(Value=25000))
                -> PublishSubject "right side crossed"
                -> WorkflowOutput
            #2 -> GroupWorkflow "Left ROI"
                WorkflowInput Source1
                -> Bonsai.Vision.Crop(RegionOfInterest(X=58, Y=259, Width=206, Height=230))
                -> Bonsai.Dsp.Sum
                -> MemberSelector(Selector=Val0)
                -> GreaterThan(Operand=DoubleProperty(Value=25000))
                -> PublishSubject "left side crossed"
                -> WorkflowOutput
            #2 -> GroupWorkflow "Start Position ROI"
                WorkflowInput Source1
                -> Bonsai.Vision.Crop(RegionOfInterest(X=803, Y=174, Width=196, Height=141))
                -> Bonsai.Dsp.Sum
                -> MemberSelector(Selector=Val0)
                -> GreaterThan(Operand=DoubleProperty(Value=25000))
                -> PublishSubject "start position crossed"
                -> WorkflowOutput
            ExternalizedMapping(trackingFile) => #6
            #2, #6 -> GroupWorkflow "Fish Tracker"
                SubscribeSubject stimLum => #0
                WorkflowInput Source1
                -> Bonsai.Vision.MorphologicalOperator(Size(Width=10, Height=10), Anchor(X=-1, Y=-1), Shape=Ellipse, Iterations=1, Operation=Dilate)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=600, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.LargestBinaryRegion
                -> Bonsai.Vision.Centroid
                -> PublishSubject centroid => #7
                #0, #7 -> Zip => #8
                ExternalizedMapping(FileName(DisplayName=trackingFile)) => #9
                #8, #9 -> Bonsai.IO.CsvWriter(FileName=C:\Users\pemb3208.ZOO\Desktop\fishProject\DATA\bubu_tracks_.csv, Append=false, Overwrite=false, Suffix=Timestamp, IncludeHeader=false)
                -> WorkflowOutput
            -> WorkflowOutput
        #0 -> GroupWorkflow "Sync signal"
            WorkflowInput Source1
            -> Bonsai.Vision.Crop(RegionOfInterest(X=38, Y=339, Width=10, Height=32))
            -> Bonsai.Vision.Grayscale
            -> Bonsai.Dsp.Sum
            -> MemberSelector(Selector=Val0)
            -> PublishSubject stimLum
            -> WorkflowOutput

GroupWorkflow "BonVision Resources"
    Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=-640, Y=-480)
      WindowBorder=Resizable
      WindowState=Fullscreen
      DisplayDevice=First
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=white-noise
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=C:\Users\pemb3208.ZOO\Desktop\fishProject\Bonsai\white-noise.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.Texture2D(Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

GroupWorkflow "Task Control"
    SubscribeSubject Reward_no => #0
    ExternalizedMapping(Lower(DisplayName=MinITI), Upper(DisplayName=maxITI))
    -> GroupWorkflow ITI
        IntProperty(Value=0)
        -> Take(Count=1) => #1
        ExternalizedMapping(Lower, Upper) => #2
        #1, #2 -> SelectMany
            ExternalizedMapping(Lower, Upper)
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=20, Upper=40)
            -> Bonsai.Numerics.Distributions.Sample => #2
            -> Bonsai.Scripting.ExpressionTransform
              Expression: Convert.ToInt32(it)
            -> Bonsai.Scripting.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT29S, Period=PT0S) => #6
            -> WorkflowOutput
            #6 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=-1, EventName=ITIoff, TargetSubject=EventsSubject)
            Bonsai.Shaders.RenderFrame
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0.5, Layer=0, Diameter=10, ColorR=0, ColorG=0, ColorB=0, ColorA=1) => #11
            #11, #6 -> TakeUntil
            #2 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=-1, EventName=ITIon, TargetSubject=EventsSubject)
        -> WorkflowOutput
    -> GroupWorkflow updateTrialList
        WorkflowInput Source1 => #0
        SubscribeSubject trialList => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        SubscribeSubject Trial_no => #4
        #0, #4 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Value) => #7
        #3, #7 -> Index(Operand=IntProperty(Value=23))
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression:
            new(
            it.Item1 as trialTYPE,
            it.Item2 as stimLEFT,
            it.Item3 as stimRIGHT,
            it.Item4 as rwdLEFT,
            it.Item5 as rwdRIGHT
            )
        -> MemberSelector(Selector=trialTYPE)
        -> MulticastSubject trialType
        -> WorkflowOutput
        #9 -> MemberSelector(Selector=stimLEFT)
        -> MulticastSubject stimLEFT
        #9 -> MemberSelector(Selector=stimRIGHT)
        -> MulticastSubject stimRIGHT
        #9 -> MemberSelector(Selector=rwdLEFT)
        -> MulticastSubject rwdLEFT
        #9 -> MemberSelector(Selector=rwdRIGHT)
        -> MulticastSubject rwdRIGHT
    -> SelectMany StartPosition
        SubscribeSubject "start position crossed"
        -> Condition => #1
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=true))
            -> WorkflowOutput
        Disable Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #2
        #1, #2 -> BooleanProperty(Value=true)
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Stim_control => #5
        WorkflowInput Source1 => #0
        SubscribeSubject trialType => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        -> PropertyMapping(EventValue) => #4
        #4, #3 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=2, EventName=trialInit, TargetSubject=EventsSubject)
        #3 -> Condition isBOTH
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> SelectMany LEFTorRIGHT => #7
            SubscribeSubject "right side crossed"
            -> Condition => #1
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            Disable Bonsai.Windows.Input.KeyDown(Filter=Right, SuppressRepetitions=false) => #2
            #1, #2 -> IntProperty(Value=1) => #3
            SubscribeSubject "left side crossed"
            -> Condition => #5
                WorkflowInput Source1
                -> Equal(Operand=BooleanProperty(Value=true))
                -> WorkflowOutput
            Disable Bonsai.Windows.Input.KeyDown(Filter=Left, SuppressRepetitions=false) => #6
            #5, #6 -> IntProperty(Value=0) => #7
            #7, #3 -> Merge
            -> Take(Count=1) => #9
            Bonsai.Shaders.RenderFrame => #10
            SubscribeSubject stimRIGHT => #11
            Bonsai.Shaders.RenderFrame => #12
            Bonsai.Shaders.RenderFrame => #13
            Bonsai.Shaders.RenderFrame => #14
            SubscribeSubject stimLEFT => #15
            Bonsai.Shaders.RenderFrame => #16
            Bonsai.Shaders.RenderFrame => #17
            Bonsai.Shaders.RenderFrame => #18
            Bonsai.Shaders.RenderFrame => #19
            Bonsai.Shaders.RenderFrame => #20
            Disable ExternalizedMapping(DueTime(DisplayName=response_window))
            -> Disable Timer(DueTime=PT1H, Period=PT0S)
            -> Disable IntProperty(Value=-1) => #23
            -> Disable Merge
            -> Disable Take(Count=1) => #25
            -> Disable WorkflowOutput
            #23 -> Disable IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=-1, EventName=timeOUT, TargetSubject=EventsSubject)
            WorkflowInput Source1 => #28
            #28, #15 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #30
            -> Condition isSTIM1 => #31
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            #16, #31 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=0, ColorB=1, ColorA=1)
            -> BooleanProperty(Value=true) => #35
            #31 -> PropertyMapping(EventValue) => #36
            #31, #36 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=1, EventName=stimLEFT, TargetSubject=EventsSubject)
            #30 -> Condition isSTIM2 => #38
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> PropertyMapping(EventValue) => #39
            #38, #39 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=2, EventName=stimLEFT, TargetSubject=EventsSubject) => #40
            #17, #40 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=0, ColorB=0, ColorA=1)
            -> BooleanProperty(Value=true) => #44
            #30 -> Condition isSTIM3 => #45
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=3))
                -> WorkflowOutput
            -> PropertyMapping(EventValue) => #46
            #45, #46 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=3, EventName=stimLEFT, TargetSubject=EventsSubject) => #47
            #18, #47 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
            -> BooleanProperty(Value=true) => #51
            #30 -> Condition isSTIM4 => #52
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            -> PropertyMapping(EventValue) => #53
            #52, #53 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=4, EventName=stimLEFT, TargetSubject=EventsSubject) => #54
            #19, #54 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=1, ColorB=0, ColorA=1)
            -> BooleanProperty(Value=true) => #58
            #35, #44, #51, #58 -> Merge
            -> IntProperty(Value=0) => #60
            #60, #9 -> TakeUntil
            #52, #45, #38, #31 -> Merge
            -> PropertyMapping(EventValue) => #63
            #7, #63 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=4, EventName=choiceLEFT, TargetSubject=EventsSubject)
            #28, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #66
            -> Condition isSTIM3 => #67
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=3))
                -> WorkflowOutput
            #12, #67 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
            -> BooleanProperty(Value=true)
            -> IntProperty(Value=0) => #72
            #67 -> PropertyMapping(EventValue) => #73
            #67, #73 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=3, EventName=stimRIGHT, TargetSubject=EventsSubject)
            #66 -> Condition isSTIM4 => #75
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            -> PropertyMapping(EventValue) => #76
            #75, #76 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=4, EventName=stimRIGHT, TargetSubject=EventsSubject) => #77
            #13, #77 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=1, ColorB=0, ColorA=1)
            -> BooleanProperty(Value=true)
            -> IntProperty(Value=0) => #82
            #66 -> Condition isSTIM1 => #83
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> PropertyMapping(EventValue) => #84
            #83, #84 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=1, EventName=stimRIGHT, TargetSubject=EventsSubject) => #85
            #10, #85 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=0, ColorB=1, ColorA=1)
            -> BooleanProperty(Value=true)
            -> IntProperty(Value=0) => #90
            #66 -> Condition isSTIM2 => #91
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> PropertyMapping(EventValue) => #92
            #91, #92 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=2, EventName=stimRIGHT, TargetSubject=EventsSubject) => #93
            #14, #93 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=0, ColorB=0, ColorA=1)
            -> BooleanProperty(Value=true)
            -> IntProperty(Value=0) => #98
            #72, #82, #90, #98 -> Merge => #99
            #99, #9 -> TakeUntil
            #9 -> WorkflowOutput
            #91, #83, #75, #67 -> Merge
            -> PropertyMapping(EventValue) => #103
            #3, #103 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=3, EventName=choiceRIGHT, TargetSubject=EventsSubject)
            #20, #28 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #106
            -> Disable IncludeWorkflow => #107
              Path=BonVision:Primitives.DrawImage.bonsai
              Angle=0
              TextureName=white-noise
              ExtentX=2
              ExtentY=1
              LocationX=1
              LocationY=-0.8
              Layer=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
            #107, #25 -> Disable TakeUntil
            #106 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0.9, Layer=0, Diameter=0.1, ColorR=1, ColorG=1, ColorB=1, ColorA=1) => #109
            #109, #25 -> Disable TakeUntil
            #106 -> Disable IncludeWorkflow => #111
              Path=BonVision:Primitives.DrawImage.bonsai
              Angle=0
              TextureName=white-noise
              ExtentX=2
              ExtentY=1
              LocationX=-1
              LocationY=-0.8
              Layer=0
              ScaleX=1
              ScaleY=1
              ShiftX=0
              ShiftY=0
            #111, #25 -> Disable TakeUntil

            Disable PropertyMapping(EventValue)
            -> Disable IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=1, EventName=choice, TargetSubject=EventsSubject)

            Disable SelectMany LEFTterminal
                SubscribeSubject stimLEFT => #0
                Bonsai.Shaders.RenderFrame => #1
                Bonsai.Shaders.RenderFrame => #2
                Bonsai.Shaders.RenderFrame => #3
                Bonsai.Shaders.RenderFrame => #4
                WorkflowInput Source1 => #5
                #5, #0 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #7
                -> Condition isSTIM1 => #8
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                #1, #8 -> SubscribeWhen
                -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
                -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=0, ColorB=0, ColorA=1)
                -> BooleanProperty(Value=true) => #12
                #8 -> PropertyMapping(EventValue) => #13
                #8, #13 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=1, EventName=stimLEFT, TargetSubject=EventsSubject)
                #7 -> Condition isSTIM2 => #15
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> PropertyMapping(EventValue) => #16
                #15, #16 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=2, EventName=stimLEFT, TargetSubject=EventsSubject) => #17
                #2, #17 -> SubscribeWhen
                -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
                -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=1, ColorB=0, ColorA=1)
                -> BooleanProperty(Value=true) => #21
                #7 -> Condition isSTIM3 => #22
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> PropertyMapping(EventValue) => #23
                #22, #23 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=3, EventName=stimLEFT, TargetSubject=EventsSubject) => #24
                #3, #24 -> SubscribeWhen
                -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
                -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=0, ColorB=1, ColorA=1)
                -> BooleanProperty(Value=true) => #28
                #7 -> Condition isSTIM4 => #29
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> PropertyMapping(EventValue) => #30
                #29, #30 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=2, EventName=stimLEFT, TargetSubject=EventsSubject) => #31
                #4, #31 -> SubscribeWhen
                -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
                -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
                -> BooleanProperty(Value=true) => #35
                #12, #21, #28, #35 -> Merge
                -> IntProperty(Value=0)
                -> TakeUntil
                #8, #15, #22, #29 -> Merge
                -> PropertyMapping(EventValue)
                -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=1, EventName=leftCross, TargetSubject=EventsSubject)

                WorkflowOutput

                Sink updateChoice
                    WorkflowInput Source1
                    -> IntProperty(Value=0)
                    -> MulticastSubject lastChoice
                    -> WorkflowOutput

            Disable SelectMany RIGHTterminal
                Bonsai.Shaders.RenderFrame => #0
                SubscribeSubject stimRIGHT => #1
                Bonsai.Shaders.RenderFrame => #2
                Bonsai.Shaders.RenderFrame => #3
                Bonsai.Shaders.RenderFrame => #4
                WorkflowInput Source1 => #5
                #5, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #7
                -> Condition isSTIM3 => #8
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                #2, #8 -> SubscribeWhen
                -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
                -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=0, ColorB=1, ColorA=1)
                -> BooleanProperty(Value=true)
                -> IntProperty(Value=0) => #13
                #8 -> PropertyMapping(EventValue) => #14
                #8, #14 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=3, EventName=stimRIGHT, TargetSubject=EventsSubject)
                #7 -> Condition isSTIM4 => #16
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> PropertyMapping(EventValue) => #17
                #16, #17 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=4, EventName=stimRIGHT, TargetSubject=EventsSubject) => #18
                #3, #18 -> SubscribeWhen
                -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
                -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
                -> BooleanProperty(Value=true)
                -> IntProperty(Value=0) => #23
                #7 -> Condition isSTIM1 => #24
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> PropertyMapping(EventValue) => #25
                #24, #25 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=1, EventName=stimRIGHT, TargetSubject=EventsSubject) => #26
                #0, #26 -> SubscribeWhen
                -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
                -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=0, ColorB=0, ColorA=1)
                -> BooleanProperty(Value=true)
                -> IntProperty(Value=0) => #31
                #7 -> Condition isSTIM2 => #32
                    WorkflowInput Source1
                    -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> PropertyMapping(EventValue) => #33
                #32, #33 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=2, EventName=stimRIGHT, TargetSubject=EventsSubject) => #34
                #4, #34 -> SubscribeWhen
                -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
                -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=1, ColorB=0, ColorA=1)
                -> BooleanProperty(Value=true)
                -> IntProperty(Value=0) => #39
                #13, #23, #31, #39 -> Merge
                -> TakeUntil
                #32, #16, #24, #8 -> Merge
                -> PropertyMapping(EventValue)
                -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=4, EventName=rightCross, TargetSubject=EventsSubject)

                WorkflowOutput

                Sink updateChoice
                    WorkflowInput Source1
                    -> IntProperty(Value=1)
                    -> MulticastSubject lastChoice
                    -> WorkflowOutput
        -> Condition choseLEFT
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Sink updateChoice => #9
            WorkflowInput Source1
            -> IntProperty(Value=0)
            -> MulticastSubject lastChoice
            -> WorkflowOutput
        ExternalizedMapping(leftCueDelay) => #10
        #9, #10 -> SelectMany LEFTterminal => #11
            SubscribeSubject stimLEFT => #0
            Bonsai.Shaders.RenderFrame => #1
            Bonsai.Shaders.RenderFrame => #2
            Bonsai.Shaders.RenderFrame => #3
            Bonsai.Shaders.RenderFrame => #4
            ExternalizedMapping(DueTime(DisplayName=leftCueDelay)) => #5
            WorkflowInput Source1 => #6
            #6, #0 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #8
            -> Condition isSTIM1 => #9
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            #1, #9 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=0, ColorB=1, ColorA=1)
            -> BooleanProperty(Value=true) => #13
            #8 -> Condition isSTIM2 => #14
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            #2, #14 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=0, ColorB=0, ColorA=1)
            -> BooleanProperty(Value=true) => #18
            #8 -> Condition isSTIM3 => #19
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=3))
                -> WorkflowOutput
            #3, #19 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
            -> BooleanProperty(Value=true) => #23
            #8 -> Condition isSTIM4 => #24
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            #4, #24 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=1, ColorB=0, ColorA=1)
            -> BooleanProperty(Value=true) => #28
            #13, #18, #23, #28 -> Merge => #29
            #29, #5 -> Delay(DueTime=PT5S)
            -> WorkflowOutput
        #7 -> Condition choseRIGHT
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Sink updateChoice => #13
            WorkflowInput Source1
            -> IntProperty(Value=1)
            -> MulticastSubject lastChoice
            -> WorkflowOutput
        ExternalizedMapping(rightCueDelay) => #14
        #13, #14 -> SelectMany RIGHTterminal => #15
            Bonsai.Shaders.RenderFrame => #0
            SubscribeSubject stimRIGHT => #1
            Bonsai.Shaders.RenderFrame => #2
            Bonsai.Shaders.RenderFrame => #3
            Bonsai.Shaders.RenderFrame => #4
            ExternalizedMapping(DueTime(DisplayName=rightCueDelay)) => #5
            WorkflowInput Source1 => #6
            #6, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #8
            -> Condition isSTIM3 => #9
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=3))
                -> WorkflowOutput
            #2, #9 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
            -> BooleanProperty(Value=true) => #13
            #8 -> Condition isSTIM4 => #14
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=4))
                -> WorkflowOutput
            #3, #14 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=1, ColorB=0, ColorA=1)
            -> BooleanProperty(Value=true) => #18
            #8 -> Condition isSTIM1 => #19
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            #0, #19 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=0, ColorB=1, ColorA=1)
            -> BooleanProperty(Value=true) => #23
            #8 -> Condition isSTIM2 => #24
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            #4, #24 -> SubscribeWhen
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=0, ColorB=0, ColorA=1)
            -> BooleanProperty(Value=true) => #28
            #13, #18, #23, #28 -> Merge => #29
            #29, #5 -> Delay(DueTime=PT5S)
            -> WorkflowOutput
        #7 -> Condition noCHOICE
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=-1))
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #17
        #11, #15, #17 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition Success
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    -> Sink Food_delivery
        WorkflowInput Source1 => #0
        SubscribeSubject lastChoice => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        -> Condition isLEFT => #4
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject rwdLEFT => #5
        #4, #5 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #7
        -> Condition giveFOOD
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #9
        -> Bonsai.Harp.CF.SyringePumpCommand(Type=EnableProtocol, Mask=Full)
        -> MulticastSubject PumpCmdLEFT
        #9 -> IntProperty(Value=1)
        -> PropertyMapping(EventValue) => #13
        #9, #13 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=1, EventName=foodLEFT, TargetSubject=EventsSubject)
        #7 -> Condition noFOOD => #15
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> PropertyMapping(EventValue) => #16
        #15, #16 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0, EventName=foodLEFT, TargetSubject=EventsSubject)
        #3 -> Condition isRIGHT => #18
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        SubscribeSubject rwdRIGHT => #19
        #18, #19 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #21
        -> Condition giveFOOD
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> BooleanProperty(Value=true) => #23
        -> Bonsai.Harp.CF.SyringePumpCommand(Type=EnableProtocol, Mask=Full)
        -> MulticastSubject PumpCmdRIGHT
        #23 -> IntProperty(Value=1)
        -> PropertyMapping(EventValue) => #27
        #23, #27 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=1, EventName=foodRIGHT, TargetSubject=EventsSubject)
        #21 -> Condition noFOOD => #29
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> PropertyMapping(EventValue) => #30
        #29, #30 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0, EventName=foodRIGHT, TargetSubject=EventsSubject)
    -> GroupWorkflow success_counter
        WorkflowInput Source1 => #0
        SubscribeSubject Reward_no => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject Reward_no
        -> WorkflowOutput
    -> BooleanProperty(Value=true)
    -> IntProperty(Value=0) => #10
    #5 -> Condition Miss
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #12
    #10, #12 -> Merge
    -> GroupWorkflow Trial_counter
        WorkflowInput Source1 => #0
        SubscribeSubject Trial_no => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject Trial_no => #5
        -> WorkflowOutput
        #5 -> PropertyMapping(EventValue) => #7
        #7, #5 -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=24, EventName=trialNumber, TargetSubject=EventsSubject)
    -> Repeat => #15
    #15, #0 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #17
    ExternalizedMapping(Value(DisplayName=nTrials)) => #18
    #17, #18 -> Condition check_end
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=24))
        -> WorkflowOutput
    -> DelaySubscription(DueTime=PT5S)
    -> Take(Count=1)
    -> WorkflowOutput
-> WorkflowOutput

GroupWorkflow Visualisation
    Bonsai.Shaders.UpdateFrame
    -> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)
    -> Bonsai.Vision.Resize(Size(Width=640, Height=480), Interpolation=Linear) => #2
    SubscribeSubject "video feed"
    -> Bonsai.Vision.Crop(RegionOfInterest(X=268, Y=101, Width=1002, Height=496))
    -> Bonsai.Vision.Resize(Size(Width=640, Height=480), Interpolation=Linear) => #5
    #2, #5 -> WithLatestFrom
    -> Bonsai.Dsp.Concat(Axis=0)
    -> WorkflowOutput
